<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:UclOpenMazeRunner;assembly=Extensions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p2="clr-namespace:UclOpen.Core;assembly=UclOpen.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SessionPath" />
        <Property Name="TaskPath" />
        <Property Name="RigPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ReadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="SessionPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\ExperimentSession.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="RigPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenMazeRunnerRig.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="TaskPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:ReadAllText">
                <io:Path>..\local\UclOpenMazeRunnerTaskLogic.json</io:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:ExperimentSession" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenMazeRunnerRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:UclOpenMazeRunnerTaskLogic" />
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Camera.ExposureTime</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ExposureTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Camera.SerialNumber</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SerialNumber" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Camera.Gain</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Gain" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:TriggeredSpinnaker.bonsai">
              <ExposureTime>15000</ExposureTime>
              <Gain>10</Gain>
              <Binning>1</Binning>
              <SerialNumber>18474551</SerialNumber>
              <ColorProcessing>Default</ColorProcessing>
              <CameraTriggerEventsSubjectName>Camera0TriggerEvents</CameraTriggerEventsSubjectName>
              <FrameEventsSubjectName>FrameEvents</FrameEventsSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>BehaviorBoard.PortName</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="PortName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.BehaviorBoard.bonsai">
              <CommandsSubjectName>BehaviorCommands</CommandsSubjectName>
              <PortName>COM9</PortName>
              <DumpRegisters>true</DumpRegisters>
              <Heartbeat>Disabled</Heartbeat>
              <EventsSubjectName>BehaviorEvents</EventsSubjectName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraTriggerController.Trigger0Frequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trigger0Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>CameraTriggerController.Trigger1Frequency</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Trigger1Frequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Devices:BehaviorBoard.CameraTriggerController.bonsai">
              <Trigger0Frequency>60</Trigger0Frequency>
              <Trigger1Frequency>60</Trigger1Frequency>
              <BehaviorCommandsSubjectName>BehaviorCommands</BehaviorCommandsSubjectName>
              <BehaviorEventsSubjectName>BehaviorEvents</BehaviorEventsSubjectName>
              <Camera0TriggerEventsSubjectName>Camera0TriggerEvents</Camera0TriggerEventsSubjectName>
              <Camera1TriggerEventsSubjectName>Camera1TriggerEvents</Camera1TriggerEventsSubjectName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="7" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="StartCamerasKey" />
        <Property Name="StopCamerasKey" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UserControl</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StartCamerasKey" Category="Hotkeys" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>LButton RButton Cancel ShiftKey ControlKey Menu Pause A B C P Q R S Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StartCameras</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Filter" DisplayName="StopCamerasKey" Category="Hotkeys" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:KeyDown">
                <wie:Filter>Back ShiftKey FinalMode H P X Shift</wie:Filter>
                <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
              </Combinator>
            </Expression>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="MulticastSubject">
              <Name>StopCameras</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>FrameEvents</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value.Image</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Flip">
          <cv:Mode>Both</cv:Mode>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Image processing</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Grayscale" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InitialBackgroundSubtraction.ThresholdValue</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ThresholdValue" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InitialBackgroundSubtraction.BackgroundFrames</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BackgroundFrames" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>InitialBackgroundSubtraction.AdaptationRate</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="AdaptationRate" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BackgroundSubtraction">
                <cv:BackgroundFrames>100</cv:BackgroundFrames>
                <cv:AdaptationRate>0</cv:AdaptationRate>
                <cv:ThresholdValue>50</cv:ThresholdValue>
                <cv:ThresholdType>Binary</cv:ThresholdType>
                <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="9" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source3" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source4" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GetAnimalPosition</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="cv:WarpPerspective">
                  <cv:Source>
                    <cv:Point2f>
                      <cv:X>46</cv:X>
                      <cv:Y>28</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>16</cv:X>
                      <cv:Y>440</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>638</cv:X>
                      <cv:Y>476</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>636</cv:X>
                      <cv:Y>76</cv:Y>
                    </cv:Point2f>
                  </cv:Source>
                  <cv:Destination>
                    <cv:Point2f>
                      <cv:X>0</cv:X>
                      <cv:Y>0</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>0</cv:X>
                      <cv:Y>512</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>640</cv:X>
                      <cv:Y>512</cv:Y>
                    </cv:Point2f>
                    <cv:Point2f>
                      <cv:X>640</cv:X>
                      <cv:Y>0</cv:Y>
                    </cv:Point2f>
                  </cv:Destination>
                  <cv:Flags>Linear</cv:Flags>
                  <cv:FillValue>
                    <cv:Val0>0</cv:Val0>
                    <cv:Val1>0</cv:Val1>
                    <cv:Val2>0</cv:Val2>
                    <cv:Val3>0</cv:Val3>
                  </cv:FillValue>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:FindContours">
                <cv:Mode>External</cv:Mode>
                <cv:Method>ChainApproxSimple</cv:Method>
                <cv:Offset>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                </cv:Offset>
                <cv:MinArea>300</cv:MinArea>
                <cv:MaxArea xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:BinaryRegionAnalysis" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:LargestBinaryRegion" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>AnimalBinary</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Centroid" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>AnimalPosition</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SubjectId</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SubjectId" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>SessionId</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SessionId" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>RootPath</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogController.bonsai">
              <SubjectId>M26021</SubjectId>
              <SessionId>0_0_Track1RUN1</SessionId>
              <Path>C:/temp_data</Path>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>BehaviorEvents</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogHarpDevice.bonsai">
              <LogName>BehaviorBoard</LogName>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>FrameEvents</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>LogVideo</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p2:GroupByTime">
                      <p2:ChunkSize>1</p2:ChunkSize>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Name" DisplayName="LogName" Description="The base name of the video log, without extension." />
                    <Property Name="FrameRate" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LogVideo</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Merge" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Name" />
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FormatFileName</Name>
                          <Description>Generates a log filename based on the input timestamp.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>PathPrefix</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>VideoData</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:StripSubstring" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>csv</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}\{1}\{2}.{3}</Format>
                                <Selector>Item1,Item2,Item3,Item4</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="8" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="3" To="8" Label="Source3" />
                              <Edge From="4" To="8" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source4" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="io:CsvWriter">
                          <io:FileName>C:/temp_data\sub-M26021\ses-0_0_Track1RUN1_date-2026-10-01T14-54-38\VideoData\VideoData.csv</io:FileName>
                          <io:Append>false</io:Append>
                          <io:Overwrite>false</io:Overwrite>
                          <io:Suffix>None</io:Suffix>
                          <io:IncludeHeader>true</io:IncludeHeader>
                          <io:Selector>Seconds</io:Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value.Image</Selector>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Data</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="GroupWorkflow">
                          <Name>FormatFileName</Name>
                          <Description>Generates a log filename based on the input timestamp.</Description>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>PathPrefix</Name>
                              </Expression>
                              <Expression xsi:type="WorkflowInput">
                                <Name>Source1</Name>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Name" Description="The base name of the log file." />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>VideoData</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p2:StripSubstring" />
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Extension" Description="The file extension" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="StringProperty">
                                  <Value>avi</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Zip" />
                              </Expression>
                              <Expression xsi:type="Format">
                                <Format>{0}\{1}\{2}.{3}</Format>
                                <Selector>Item1,Item2,Item3,Item4</Selector>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="8" Label="Source1" />
                              <Edge From="1" To="3" Label="Source1" />
                              <Edge From="2" To="3" Label="Source2" />
                              <Edge From="3" To="4" Label="Source1" />
                              <Edge From="3" To="8" Label="Source3" />
                              <Edge From="4" To="8" Label="Source2" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="8" Label="Source4" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="FileName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="FrameRate" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="cv:VideoWriter">
                            <cv:FileName>C:/temp_data\sub-M26021\ses-0_0_Track1RUN1_date-2026-10-01T14-54-38\VideoData\VideoData.avi</cv:FileName>
                            <cv:Suffix>None</cv:Suffix>
                            <cv:Buffered>true</cv:Buffered>
                            <cv:Overwrite>false</cv:Overwrite>
                            <cv:FourCC>FMP4</cv:FourCC>
                            <cv:FrameRate>50</cv:FrameRate>
                            <cv:FrameSize>
                              <cv:Width>0</cv:Width>
                              <cv:Height>0</cv:Height>
                            </cv:FrameSize>
                            <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="9" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="7" Label="Source1" />
                        <Edge From="6" To="7" Label="Source2" />
                        <Edge From="6" To="13" Label="Source2" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="16" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="16" Label="Source2" />
                        <Edge From="15" To="16" Label="Source3" />
                        <Edge From="16" To="17" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Switch" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="3" Label="Source2" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogDataSchema.bonsai">
              <Name>SessionSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogDataSchema.bonsai">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SerializeToJson">
                <p1:Formatting>None</p1:Formatting>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="UclOpen.Logging:LogDataSchema.bonsai">
              <Name>TaskSchema</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="9" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>